[
    {
        "object.className": "ProtImportMicrographsTiltPairs",
        "object.id": "2",
        "object.label": "scipion - import tilted micrographs",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "patternUntilted": "/home/binshtem/ScipionUserData/data/tests/rct/micrographs/F_rct_u_*.tif",
        "patternTilted": "/home/binshtem/ScipionUserData/data/tests/rct/micrographs/F_rct_t_*.tif",
        "copyToProj": false,
        "voltage": 100.0,
        "sphericalAberration": 2.8,
        "ampContrast": 0.1,
        "samplingRateMode": 0,
        "samplingRate": 2.28,
        "magnification": 50000,
        "scannedPixelSize": 7.0
    },
    {
        "object.className": "XmippProtParticlePickingPairs",
        "object.id": "70",
        "object.label": "xmipp3 - tilt pairs particle picking",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "memory": 2.0,
        "inputMicrographsTiltedPair": "2.outputMicrographsTiltPair"
    },
    {
        "object.className": "XmippProtExtractParticlesPairs",
        "object.id": "179",
        "object.label": "xmipp3 - extract particle pairs",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "downsampleType": 1,
        "downFactor": 2.0,
        "boxSize": 60,
        "doRemoveDust": true,
        "thresholdDust": 3.5,
        "doInvert": false,
        "doNormalize": true,
        "normType": 2,
        "backRadius": -1,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputCoordinatesTiltedPairs": "70.outputCoordinatesTiltPair2"
    },
    {
        "object.className": "XmippProtFilterParticles",
        "object.id": "307",
        "object.label": "xmipp3 - filter particles",
        "object.comment": "un-tilt",
        "runName": null,
        "runMode": 0,
        "filterSpace": 0,
        "filterModeFourier": 2,
        "filterModeReal": 0,
        "filterModeWavelets": 0,
        "freqInAngstrom": true,
        "lowFreqA": 85.0,
        "highFreqA": 10.0,
        "freqDecayA": 100.0,
        "lowFreqDig": 0.02,
        "highFreqDig": 0.35,
        "freqDecayDig": 0.02,
        "waveletMode": 0,
        "hostName": "localhost",
        "inputParticles": "179.outputParticlesTiltPair._untilted"
    },
    {
        "object.className": "XmippProtCL2D",
        "object.id": "362",
        "object.label": "xmipp3 - cl2d",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "numberOfClasses": 8,
        "randomInitialization": true,
        "numberOfInitialClasses": 2,
        "numberOfIterations": 10,
        "comparisonMethod": 0,
        "clusteringMethod": 0,
        "extraParams": null,
        "doCore": true,
        "thZscore": 3.0,
        "thPCAZscore": 3.0,
        "doStableCore": true,
        "tolerance": 1,
        "computeHierarchy": false,
        "analyzeRejected": false,
        "hostName": "localhost",
        "numberOfMpi": 4,
        "inputParticles": "307.outputParticles"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "425",
        "object.label": "good_classes",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "other": "346",
        "sqliteFile": "Runs/000362_XmippProtCL2D/extra/level_02/level_classes_stable_core.xmd_classes_state.sqlite,",
        "outputClassName": "SetOfClasses2D",
        "inputObject": "362."
    },
    {
        "object.className": "XmippProtRansac",
        "object.id": "496",
        "object.label": "xmipp3 - ransac",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "symmetryGroup": "c1",
        "angularSampling": 5.0,
        "nRansac": 100,
        "dimRed": false,
        "numGrids": 3,
        "numSamples": 6,
        "corrThresh": 0.77,
        "numVolumes": 3,
        "numIter": 3,
        "maxFreq": 20,
        "useAll": false,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputSet": "425.outputClasses2D"
    },
    {
        "object.className": "EmanProtInitModel",
        "object.id": "536",
        "object.label": "eman2 - initial model",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "symmetry": "c1",
        "numberOfIterations": 10,
        "numberOfModels": 3,
        "shrink": 1,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "inputSet": "425.outputClasses2D"
    },
    {
        "object.className": "XmippProtFilterVolumes",
        "object.id": "595",
        "object.label": "xmipp3 - filter volumes",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "filterSpace": 0,
        "filterModeFourier": 2,
        "filterModeReal": 0,
        "filterModeWavelets": 0,
        "freqInAngstrom": true,
        "lowFreqA": 68.9,
        "highFreqA": 9.3,
        "freqDecayA": 100.1,
        "lowFreqDig": 0.02,
        "highFreqDig": 0.35,
        "freqDecayDig": 0.02,
        "waveletMode": 0,
        "hostName": "localhost",
        "numberOfThreads": 2,
        "numberOfMpi": 1,
        "inputVolumes": "496.outputVolumes"
    },
    {
        "object.className": "XmippProtProjMatch",
        "object.id": "720",
        "object.label": "xmipp3 - projection matching",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "useInitialAngles": false,
        "cleanUpFiles": false,
        "doCTFCorrection": false,
        "doAutoCTFGroup": true,
        "ctfGroupMaxDiff": 0.1,
        "ctfGroupMaxResol": 5.6,
        "setOfDefocus": "",
        "paddingFactor": 2.0,
        "wienerConstant": -1.0,
        "maskType": 0,
        "maskRadius": -1,
        "numberOfIterations": 4,
        "innerRadius": "0",
        "outerRadius": "28",
        "availableMemory": 2,
        "angSamplingRateDeg": "7 5 3 2",
        "maxChangeInAngles": "1000 10 6 4",
        "perturbProjectionDirections": "0",
        "projectionMethod": 1,
        "paddingAngularProjection": 1.0,
        "kernelAngularProjection": 2,
        "maxChangeOffset": "1000 10 5",
        "search5DShift": "4x5 0",
        "search5DStep": "2",
        "doRestricSearchbyTiltAngle": false,
        "tilt0": 0.0,
        "tiltF": 180.0,
        "symmetry": "c1",
        "symmetryGroupNeighbourhood": "",
        "onlyWinner": "0",
        "discardImages": 0,
        "minimumCrossCorrelation": "0.1",
        "discardPercentage": "10",
        "discardPercentagePerClass": "10",
        "doScale": false,
        "scaleStep": "1",
        "scaleNumberOfSteps": "3",
        "projMatchingExtra": "",
        "performAlign2D": false,
        "doAlign2D": "0",
        "align2DIterNr": "4",
        "align2dMaxChangeOffset": "2x1000 2x10",
        "align2dMaxChangeRot": "2x1000 2x20",
        "reconstructionMethod": 0,
        "fourierMaxFrequencyOfInterest": 0.25,
        "fourierReconstructionExtraCommand": "",
        "artLambda": "0.2",
        "artReconstructionExtraCommand": "-k 0.5 -n 10 ",
        "wbpReconstructionExtraCommand": "",
        "doComputeResolution": true,
        "doSplitReferenceImages": "1",
        "doLowPassFilter": true,
        "useFscForFilter": true,
        "constantToAddToFiltration": "0.05",
        "constantToAddToMaxReconstructionFrequency": "0.1",
        "mpiJobSize": 2,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 6,
        "inputParticles": "179.outputParticlesTiltPair._tilted",
        "input3DReferences": "595.outputVol.1"
    },
    {
        "object.className": "XmippProtRCT",
        "object.id": "1029",
        "object.label": "xmipp3 - random conical tilt 2",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "thinObject": true,
        "maxShift": 10,
        "skipTranslation": false,
        "additionalParams": "-n 5 -l 0.01",
        "doFilter": true,
        "resoLowPassFilter": 0.2,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputParticlesTiltPair": "179.outputParticlesTiltPair",
        "inputParticles": "425.outputClasses2D"
    },
    {
        "object.className": "ProtSplitSet",
        "object.id": "1121",
        "object.label": "scipion - split sets",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "numberOfSets": 10,
        "randomize": true,
        "inputSet": "179.outputParticlesTiltPair._untilted"
    },
    {
        "object.className": "ProtUnionSet",
        "object.id": "1310",
        "object.label": "scipion - join sets 10% untilt",
        "object.comment": "10% untilt",
        "runName": null,
        "runMode": 0,
        "inputType": 5,
        "inputSets": [
            "179.outputParticlesTiltPair._tilted",
            "1121.outputParticles01"
        ],
        "renumber": false,
        "ignoreDuplicates": false
    },
    {
        "object.className": "ProtRelionRefine3D",
        "object.id": "1371",
        "object.label": "relion - 3D auto-refine",
        "object.comment": "pick the model that you want to refine",
        "runName": null,
        "runMode": 0,
        "isClassify": false,
        "is2D": false,
        "doContinue": false,
        "maskDiameterA": 200,
        "continueIter": "last",
        "numberOfClasses": 3,
        "isMapAbsoluteGreyScale": false,
        "symmetryGroup": "c1",
        "initialLowPassFilterA": 50.0,
        "contuinueMsg": "True",
        "doCTF": false,
        "hasReferenceCTFCorrected": false,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 1.0,
        "maskZero": 0,
        "noteAutoSampling": null,
        "doImageAlignment": true,
        "angularSamplingDeg": 2,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "localSearchAutoSamplingDeg": 4,
        "realignMovieFrames": false,
        "movieAvgWindow": 5.0,
        "movieStdTrans": 1.0,
        "movieIncludeRotSearch": false,
        "movieStdRot": 1.0,
        "memoryPreThreads": 2,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 3,
        "referenceVolume": "1029.outputVolumes.1",
        "inputParticles": "1310.outputSet"
    }
]
