[
    {
        "object.className": "ProtImportMicrographs",
        "object.id": "2",
        "object.label": "1. import mics",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "/home/sbgrid/programs/x86_64-linux/scipion/1.0.1/data/tests/xmipp_tutorial/micrographs/*.mrc",
        "filesPattern": "",
        "copyFiles": false,
        "emxFile": null,
        "mdFile": null,
        "sqliteFile": null,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.0,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRateMode": 0,
        "samplingRate": 1.237,
        "scannedPixelSize": 7.0
    },
    {
        "object.className": "XmippProtPreprocessMicrographs",
        "object.id": "43",
        "object.label": "2. downsample x5",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "orderComment": null,
        "doCrop": false,
        "cropPixels": 10,
        "doLog": false,
        "logA": 4.431,
        "logB": 0.4018,
        "logC": 336.6,
        "doRemoveBadPix": false,
        "mulStddev": 5,
        "doInvert": true,
        "doDownsample": true,
        "downFactor": 5.0,
        "doSmooth": false,
        "sigmaConvolution": 2.0,
        "doNormalize": false,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMicrographs": "2.outputMicrographs"
    },
    {
        "object.className": "ProtCTFFind",
        "object.id": "85",
        "object.label": "3. ctffind3",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "ctfDownFactor": 1.0,
        "useCtffind4": true,
        "astigmatism": 100.0,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 3.15,
        "stepPhaseShift": 0.2,
        "lowRes": 0.14,
        "highRes": 0.46,
        "minDefocus": 0.5,
        "maxDefocus": 4.0,
        "windowSize": 256,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMicrographs": "43.outputMicrographs"
    },
    {
        "object.className": "XmippProtParticlePicking",
        "object.id": "129",
        "object.label": "4a. xmipp picking",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "memory": 2.0,
        "inputMicrographs": "43.outputMicrographs"
    },
    {
        "object.className": "XmippProtExtractParticles",
        "object.id": "158",
        "object.label": "5. extract particles",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "downFactor": 2.0,
        "boxSize": 110,
        "doSort": true,
        "rejectionMethod": 0,
        "maxZscore": 3,
        "percentage": 5,
        "doRemoveDust": true,
        "thresholdDust": 3.5,
        "doInvert": false,
        "doFlip": true,
        "doNormalize": true,
        "normType": 2,
        "backRadius": -1,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "ctfRelations": "85.outputCTF",
        "inputCoordinates": "129.outputCoordinates"
    },
    {
        "object.className": "ProtImportVolumes",
        "object.id": "203",
        "object.label": "1b. import vol",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "/home/sbgrid/programs/x86_64-linux/scipion/1.0.1/data/tests/xmipp_tutorial/volumes/BPV_scale_filtered_windowed_110.vol",
        "filesPattern": "",
        "copyFiles": false,
        "samplingRate": 6.185
    },
    {
        "object.className": "EmanProtBoxing",
        "object.id": "322",
        "object.label": "4b Eman boxer",
        "object.comment": "\n",
        "runName": null,
        "runMode": 0,
        "inputMicrographs": "43.outputMicrographs"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "415",
        "object.label": "6. good subset",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "other": null,
        "sqliteFile": "Runs/000158_XmippProtExtractParticles/particles_state.sqlite,",
        "outputClassName": "SetOfParticles",
        "inputObject": "158.outputParticles"
    },
    {
        "object.className": "XmippProtCL2D",
        "object.id": "485",
        "object.label": "7a. xmipp3 - cl2d",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "numberOfClasses": 3,
        "randomInitialization": true,
        "numberOfInitialClasses": 3,
        "numberOfIterations": 10,
        "comparisonMethod": 0,
        "clusteringMethod": 0,
        "extraParams": null,
        "doCore": true,
        "thZscore": 3.0,
        "thPCAZscore": 3.0,
        "doStableCore": true,
        "tolerance": 1,
        "computeHierarchy": false,
        "analyzeRejected": false,
        "hostName": "localhost",
        "numberOfMpi": 2,
        "inputParticles": "415.outputParticles"
    },
    {
        "object.className": "ProtRelionClassify2D",
        "object.id": "528",
        "object.label": "7b. relion - 2D classification",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "isClassify": true,
        "is2D": true,
        "doContinue": false,
        "maskDiameterA": 660,
        "continueIter": "last",
        "numberOfClasses": 3,
        "isMapAbsoluteGreyScale": false,
        "symmetryGroup": "c1",
        "initialLowPassFilterA": 60.0,
        "contuinueMsg": "True",
        "doCTF": true,
        "hasReferenceCTFCorrected": false,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 1.0,
        "numberOfIterations": 25,
        "regularisationParamT": 2,
        "maskZero": 0,
        "limitResolEStep": -1.0,
        "doImageAlignment": true,
        "inplaneAngularSamplingDeg": 5.0,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "memoryPreThreads": 2,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 2,
        "inputParticles": "415.outputParticles"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "592",
        "object.label": "8a. after_2D_subset",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "other": null,
        "sqliteFile": "Runs/000485_XmippProtCL2D/classes2D_state.sqlite,",
        "outputClassName": "SetOfParticles",
        "inputObject": "485.outputClasses"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "644",
        "object.label": "8b. after_2D_subset",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "other": null,
        "sqliteFile": "Runs/000528_ProtRelionClassify2D/classes2D_state.sqlite,",
        "outputClassName": "SetOfParticles",
        "inputObject": "528.outputClasses"
    },
    {
        "object.className": "XmippProtProjMatch",
        "object.id": "690",
        "object.label": "9a. projection matching 2",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "useInitialAngles": false,
        "cleanUpFiles": false,
        "doCTFCorrection": true,
        "doAutoCTFGroup": true,
        "ctfGroupMaxDiff": 0.1,
        "ctfGroupMaxResol": 5.6,
        "setOfDefocus": "",
        "paddingFactor": 2.0,
        "wienerConstant": -1.0,
        "maskType": 1,
        "maskRadius": 55,
        "numberOfIterations": 3,
        "innerRadius": "0",
        "outerRadius": "55",
        "availableMemory": 2,
        "angSamplingRateDeg": "3 2 1 0.5",
        "maxChangeInAngles": "1000 8 4 2",
        "perturbProjectionDirections": "0",
        "projectionMethod": 1,
        "paddingAngularProjection": 1.0,
        "kernelAngularProjection": 2,
        "maxChangeOffset": "1000 10 5",
        "search5DShift": "2x5",
        "search5DStep": "2",
        "doRestricSearchbyTiltAngle": false,
        "tilt0": 0.0,
        "tiltF": 180.0,
        "symmetry": "i1",
        "symmetryGroupNeighbourhood": "",
        "onlyWinner": "0",
        "discardImages": 0,
        "minimumCrossCorrelation": "0.1",
        "discardPercentage": "10",
        "discardPercentagePerClass": "10",
        "doScale": false,
        "scaleStep": "1",
        "scaleNumberOfSteps": "3",
        "projMatchingExtra": "",
        "performAlign2D": false,
        "doAlign2D": "0",
        "align2DIterNr": "4",
        "align2dMaxChangeOffset": "2x1000 2x10",
        "align2dMaxChangeRot": "2x1000 2x20",
        "reconstructionMethod": 0,
        "fourierMaxFrequencyOfInterest": 0.25,
        "fourierReconstructionExtraCommand": "",
        "artLambda": "0.2",
        "artReconstructionExtraCommand": "-k 0.5 -n 10 ",
        "wbpReconstructionExtraCommand": "",
        "doComputeResolution": true,
        "doSplitReferenceImages": "1",
        "doLowPassFilter": true,
        "useFscForFilter": true,
        "constantToAddToFiltration": "0.05",
        "constantToAddToMaxReconstructionFrequency": "0.1",
        "mpiJobSize": 2,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 3,
        "input3DReferences": "203.outputVolume",
        "inputParticles": "592.outputParticles"
    },
    {
        "object.className": "ProtRelionClassify3D",
        "object.id": "780",
        "object.label": "9b. relion - 3D classification",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "isClassify": true,
        "is2D": false,
        "doContinue": false,
        "maskDiameterA": 660,
        "continueIter": "last",
        "numberOfClasses": 3,
        "isMapAbsoluteGreyScale": false,
        "symmetryGroup": "c1",
        "initialLowPassFilterA": 60.0,
        "contuinueMsg": "True",
        "doCTF": true,
        "hasReferenceCTFCorrected": false,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 1.0,
        "numberOfIterations": 25,
        "regularisationParamT": 2,
        "maskZero": 0,
        "limitResolEStep": -1.0,
        "doImageAlignment": true,
        "angularSamplingDeg": 2,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "localAngularSearch": false,
        "localAngularSearchRange": 5.0,
        "memoryPreThreads": 2,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 3,
        "referenceVolume": "203.outputVolume",
        "inputParticles": "644.outputParticles"
    },
    {
        "object.className": "ProtRelionRefine3D",
        "object.id": "844",
        "object.label": "10. relion - 3D auto-refine",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "isClassify": false,
        "is2D": false,
        "doContinue": false,
        "maskDiameterA": 660,
        "continueIter": "last",
        "numberOfClasses": 3,
        "isMapAbsoluteGreyScale": false,
        "symmetryGroup": "c1",
        "initialLowPassFilterA": 60.0,
        "contuinueMsg": "True",
        "doCTF": true,
        "hasReferenceCTFCorrected": false,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 1.0,
        "maskZero": 0,
        "noteAutoSampling": null,
        "doImageAlignment": true,
        "angularSamplingDeg": 2,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "localSearchAutoSamplingDeg": 4,
        "realignMovieFrames": false,
        "movieAvgWindow": 5.0,
        "movieStdTrans": 1.0,
        "movieIncludeRotSearch": false,
        "movieStdRot": 1.0,
        "memoryPreThreads": 2,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 2,
        "numberOfMpi": 3,
        "referenceVolume": "203.outputVolume",
        "inputParticles": "780.outputClasses.1"
    }
]
